// Orthanc configuration — Imladris Modality Simulator
// AE title: IML_CR_01 / IML_US_01   HTTP: 8042   DICOM: 4242
{
  "Name"                  : "Imladris Modality Simulator",
  "DicomAet"              : "IML_CR_01",
  "DicomPort"             : 4242,
  "HttpPort"              : 8042,

  // Allow connections from any host (lab environment — not for production)
  "RemoteAccessAllowed"   : true,
  "AuthenticationEnabled" : false,

  // Accept C-STORE for any SOP class (CT, CR, DX, etc.)
  "UnknownSopClassAccepted" : true,

  // Do not reject associations whose Called AET doesn't match ours
  "DicomCheckCalledAet"   : false,

  // Known remote modalities
  // Format: "nickname": ["AET", "hostname", port]
  "DicomModalities" : {
    "IML_PACS_01"    : ["IML_PACS_01",    "orthanc-pacs",         4242],
    "IML_CR_01"      : ["IML_CR_01",      "imladris-sidecar",     4242],
    "IML_US_01"      : ["IML_US_01",      "imladris-sidecar",     4242],
    "FULFILL_SCU"    : ["FULFILL_SCU",    "host.docker.internal", 4242],
    // AdvaPACS Gateway — C-STORE SCP on BESSIE (Local AE ADVAPACS_GW_01 configured in AdvaPACS cloud admin)
    "ADVAPACS_GW_01" : ["ADVAPACS_GW_01", "192.168.1.10",         11112]
  },
  "OrthancExplorer2" : {
    "Enable" : true,
    "IsDefaultOrthancUI" : true,
    "UiOptions" : {
      "ShowOrthancName" : true
    }
  },
  // Enable bundled plugins (Stone Web Viewer, Worklist, etc.)
  "Plugins" : ["/usr/share/orthanc/plugins/"],

  // Modality Worklist plugin — reads .wl files from /worklist (shared volume)
  "Worklists" : {
    "Enable"   : true,
    "Database" : "/worklist"
  }
}
